<?xml version="1.0" encoding="UTF-8"?>
<!-- https://mircwiki.rsna.org/index.php?title=CTP-The_RSNA_Clinical_Trial_Processor -->
<Configuration>
  <Server
    port="8080"
    ssl="no"
    requireAuthentication="no"
    userClassName="org.rsna.server.UsersXmlFileImpl">
    <ProxyServer
      proxyIPAddress=""
      proxyPort=""
      proxyUsername=""
      proxyPassword=""
      />
    <SSL
      keystore=""
      keystorePassword=""
      truststore=""
      truststorePassword=""
      />
  </Server>
  <Plugin
    name="log name"
    id="pluginID"
    class="org.rsna.ctp.stdplugins.AuditLog"
    root="root-directory"
    />
  <Plugin
    name="Redirector"
    class="org.rsna.ctp.stdplugins.Redirector"
    httpPort="8080"
    httpsHost="mirc.mysecuresite.myuniversity.edu"
    httpsPort="8443"
    />
  <Pipeline name="Pipeline001">
    <DicomImportService
      name="DicomImportService"
      class="org.rsna.ctp.stdstages.DicomImportService"
      root="roots/dicom-import"
      port="1104"
      />
    <FileStorageService
      name="FileStorageService"
      class="org.rsna.ctp.stdstages.FileStorageService"
      root="storage"
      returnStoredFile="no"
      quarantine="quarantines/storage"
      />
    <DicomAnonymizer
      name="DicomAnonymizer"
      class="org.rsna.ctp.stdstages.DicomAnonymizer"
      root="roots/anonymizer"
      script="scripts/da.script"
      quarantine="quarantines/anonymizer"
      />
    <HttpExportService
      name="HttpExportService"
      class="org.rsna.ctp.stdstages.HttpExportService"
      root="roots/http-export"
      url="https://university.edu:1443"
      />
  </Pipeline>
</Configuration>

